PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = final project
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_1
      image [set every repeat] = $pic
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = ("never","rarely", "sometimes", "very often", "always")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.3, 0.1)
      startVal [time (s)] = 1.5
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine trial_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome to the experiment
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  Routine instructions
    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        please enjoy


        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition final project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pic': 'photo1.jpg'},
      {'pic': 'photo2.jpg'},
      {'pic': 'photo3.jpg'},
      {'pic': 'photo4.jpg'}]
    Routine trial
  LoopTerminator trials
